PsychoPy2experiment version="2022.1.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['sbj'], expName, expInfo['date'])
  Experiment info = {'sbj': '810100476', 'hndns': '', 'eye': '', 'sex': '', 'age': '', 'edu': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = CS_HW1
  keyboardBackend = ioHub
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Routines
  Routine hi
    TextComponent hello
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = سلام
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  Routine count_down
    TextComponent three
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 3
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    TextComponent two
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 2
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    TextComponent one
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = 1
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  Routine fix_point
    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine faces
    ImageComponent stim
      image [set every repeat] = $stm
      pos [set every repeat] = poss
      size [set every repeat] = size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent keybrd2
      allowedKeys [set every repeat] = key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine key_press
    KeyboardComponent keybrd
      allowedKeys [set every repeat] = key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tutorial
    ImageComponent key_pic
      image [set every repeat] = $pic
      ori = 90
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent upper_text
      languageStyle = Arabic
      letterHeight = 0.035
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txt
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    TextComponent lower_text
      languageStyle = Arabic
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = - در صورت آماده بودن کلید Space را فشار دهید -
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  Routine tnx
    TextComponent end
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = پایان
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    TextComponent thanks
      languageStyle = Arabic
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 5.5
      text = * ممنون از همکاری شما *
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Flow
  Routine hi
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = hands.xlsx
    loopType = fullRandom
    nReps = 1
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    Routine tutorial
    Routine count_down
    LoopInitiator loops loopType="TrialHandler"
      conditionsFile = stimulies.xlsx
      loopType = fullRandom
      nReps = 2
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      Routine fix_point
      Routine faces
    LoopTerminator loops
  LoopTerminator blocks
  Routine tnx
